WorkflowBuilder(Version=2.9.0)
GroupWorkflow EnvironmentSubjectState
    SubscribeSubject CameraControllerEvents
    -> IncludeWorkflow(Path=Extensions\SubjectDatabase.bonsai, DatabaseConfig=Z:\aeon\config\database.config)
    -> MulticastSubject SubjectState
    -> VisualizerMapping => #3
    SubscribeSubject CameraControllerEvents
    -> Aeon.Environment.AnnotationSource
    -> MulticastSubject Annotations
    -> VisualizerMapping => #7
    SubscribeSubject CameraControllerEvents
    -> Aeon.Environment.EnvironmentState
    -> MulticastSubject EnvironmentState
    -> VisualizerMapping => #11
    SubscribeSubject AlertLogs
    -> MemberSelector(Selector="Seconds,Value.Priority,Value.Type,Value.Message")
    -> Format(Format="{0},{1},{2},{3}", Selector="Item1,Item2,Item3,Item4") => #14
    SubscribeSubject Annotations
    -> Condition Alert
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Priority)
        -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.PriorityLevel>(Value=Alert))
        -> WorkflowOutput
    -> Format => #17
      Format:
        ## **Experimenter Annotation**
        **Message**: {0}
      Selector=Value.Message
    #14, #17 -> Merge
    -> VisualizerMapping => #19
    #11, #19 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #21
    #7, #21 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #23
    SubscribeSubject SubjectWeight
    -> Merge
    -> SampleInterval(Interval=PT0.1S)
    -> VisualizerMapping => #27
    #3, #23, #27 -> Bonsai.Gui.TableLayoutPanelBuilder EnvironmentSubjectState
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=3
      ColumnStyles=""
      RowStyles(RowStyle(SizeType=Percent, Height=40), RowStyle(SizeType=Percent, Height=40), RowStyle(SizeType=Percent, Height=20))
      CellSpans=""
    -> WorkflowOutput
-> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #1
Defer FeederController
    SubscribeSubject FeederEvents
    -> MemberSelector(Selector=Key) => #1
    SubscribeSubject RigConfiguration
    -> MemberSelector(Selector=Feeders.Count)
    -> PropertyMapping(Count) => #4
    #1, #4 -> Take(Count=3)
    -> ToArray
    -> Bonsai.Gui.ListBoxDataSourceBuilder(Enabled=true, Visible=true, DisplayMember="") => #7
    -> BehaviorSubject SelectedFeeder
    SubscribeSubject SelectedFeeder
    -> Format(Format=Feeder_{0}, Selector=it)
    -> PropertyMapping(Text(Selector=it))
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 15.75pt", Text=Feeder_Feeder1)
    -> VisualizerMapping => #13
    #7 -> VisualizerMapping => #14
    #13, #14 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #16
    SubscribeSubject SelectedFeeder
    -> CreateObservable
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject SelectedFeeder

        SubscribeSubject FeederDispenser => #3
        SubscribeSubject SelectedFeeder => #4
        #3, #4 -> WithLatestFrom
        -> Condition SelectedPatch
            WorkflowInput Source1
            -> MemberSelector(Selector="Item2,Item1.Key")
            -> Equal
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1)
        -> Merge
        -> WorkflowOutput
    -> Switch
    -> Aeon.Foraging.DispenserController
    -> Sink
        WorkflowInput Source1 => #0
        SubscribeSubject SelectedFeeder => #1
        #0, #1 -> WithLatestFrom
        -> MulticastSubject FeederController
        -> WorkflowOutput
    -> VisualizerMapping => #22
    #16, #22 -> Bonsai.Gui.TableLayoutPanelBuilder Feeders(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #24
    SubscribeSubject SelectedFeeder
    -> CreateObservable
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject SelectedFeeder

        ExternalizedMapping(Name(DisplayName=PelletCommand))
        -> SubscribeSubject FeederEvents
        -> Condition ID
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            SubscribeSubject SelectedFeeder => #2
            #1, #2 -> WithLatestFrom
            -> Equal
            -> WorkflowOutput
        -> Merge
        -> Harp.OutputExpander.FilterRegister(FilterType=Include, Register=Harp.OutputExpander.OutputSet)
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Write)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #9
          Expression:
            new(
            it.GetTimestamp() as Timestamp,
            False as Value)
        ExternalizedMapping(Name(DisplayName=PelletDelivered))
        -> SubscribeSubject FeederPelletDelivered
        -> Condition ID
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            SubscribeSubject SelectedFeeder => #2
            #1, #2 -> WithLatestFrom
            -> Equal
            -> WorkflowOutput
        -> Merge
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #14
          Expression:
            new(
            Seconds as Timestamp,
            True as Value)
        #9, #14 -> Merge
        -> MemberSelector(Selector=Value)
        -> WorkflowOutput
    -> Switch
    -> VisualizerMapping => #28
    SubscribeSubject SelectedFeeder
    -> CreateObservable WheelDisplacement
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject FeederId

        SubscribeSubject FeederWheelDisplacement
        -> Condition ID
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            SubscribeSubject FeederId => #2
            #1, #2 -> WithLatestFrom
            -> Equal
            -> WorkflowOutput
        -> Merge => #5
        ExternalizedMapping(Gain) => #6
        #5, #6 -> Bonsai.Harp.ConvertTimestamped
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=Gain, Description="A factor used to increase or decrease the speed of integration.")) => #1
            #0, #1 -> Multiply(Operand=DoubleProperty(Value=1))
            -> Accumulate
            -> WorkflowOutput
        -> SampleInterval(Interval=PT0.02S)
        -> WorkflowOutput
    -> Switch
    -> MemberSelector(Selector=Value)
    -> VisualizerMapping => #33
    #24, #28, #33 -> Bonsai.Gui.TableLayoutPanelBuilder Feeders(Enabled=true, Visible=true, ColumnCount=1, RowCount=3, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput
-> VisualizerMapping => #3
Disable Defer InStateFeeder
    SubscribeSubject CurrentState => #0
    SubscribeSubject States => #1
    #0, #1 -> CombineLatest
    -> SelectMany RunningState
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject state

        SubscribeSubject state
        -> MemberSelector(Selector=Item2)
        -> Condition => #5
            WorkflowInput Source1
            -> MemberSelector(Selector=Keys)
            -> Merge
            -> SelectMany
                WorkflowInput Source1 => #0
                SubscribeSubject state
                -> MemberSelector(Selector=Item1) => #2
                #0, #2 -> WithLatestFrom
                -> Equal
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> WorkflowOutput
            -> WorkflowOutput
        SubscribeSubject state
        -> MemberSelector(Selector=Item1)
        -> PropertyMapping(Value) => #8
        #5, #8 -> Index(Operand=StringProperty(Value=Rule2_A))
        -> Take(Count=1)
        -> WorkflowOutput
    -> BehaviorSubject State
    -> MemberSelector(Selector=PatchStates)
    -> MemberSelector(Selector=Count)
    -> BehaviorSubject WheelCount

    BehaviorSubject<HtsLoom.FeederName> SelectedWheel
    -> CreateObservable InStateWheelDisplacement
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject SelectedWheel

        SubscribeSubject InStateWheelDisplacement
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            SubscribeSubject SelectedWheel => #2
            #1, #2 -> WithLatestFrom
            -> Equal
            -> WorkflowOutput
        -> Merge
        -> MemberSelector(Selector=Value) => #6
        SubscribeSubject State
        -> MemberSelector(Selector=PatchStates)
        -> Merge
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            SubscribeSubject SelectedWheel => #2
            #1, #2 -> WithLatestFrom
            -> Equal
            -> WorkflowOutput
        -> MemberSelector(Selector=Value.RewardRule.DistanceThreshold) => #11
        #6, #11 -> WithLatestFrom
        -> WorkflowOutput
    -> Switch
    -> PublishSubject WheelDisplacement

    SubscribeSubject<System.Int32> WheelCount => #12
    SubscribeSubject State => #13
    #12, #13 -> Zip
    -> SelectMany GetFeeders
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject Feeders

        SubscribeSubject Feeders
        -> MemberSelector(Selector=Item2.PatchStates)
        -> Merge
        -> MemberSelector(Selector=Key) => #6
        SubscribeSubject Feeders
        -> MemberSelector(Selector=Item1)
        -> PropertyMapping(Count) => #9
        #6, #9 -> Take(Count=6)
        -> ToArray
        -> WorkflowOutput
    -> Bonsai.Gui.ListBoxDataSourceBuilder(Enabled=true, Visible=true, DisplayMember="")
    -> MulticastSubject SelectedWheel
    -> VisualizerMapping => #18
    SubscribeSubject WheelDisplacement
    -> BufferTime(TimeSpan=PT1S)
    -> MemberSelector(Selector=Count)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #22
    SubscribeSubject MetaStateCurrentTimeInterval
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> SampleInterval(Interval=PT1S) => #25
    SubscribeSubject CurrentState => #26
    SubscribeSubject CurrentMetaState => #27
    SubscribeSubject MetaStateStateCounter => #28
    SubscribeSubject MetaStateEatenPelletsCount => #29
    #25, #26, #27, #28, #29 -> CombineLatest
    -> Format
      Format:
        Meta: {2}
        State: {1}
        Time: {0}
        StateCounter: {3}
        EatenPellets: {4}
      Selector="Item1,Item2,Item3.Item2,Item4,Item5"
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder State
      Enabled=true
      Visible=true
      Font="Microsoft Sans Serif, 12pt, style=Bold"
      Text:
        Meta: State_2
        State: Rule2_A
        Time: 00:40:48.7890000
        StateCounter: 0
        EatenPellets: 0
    -> VisualizerMapping => #34
    #18, #22, #34 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #36
    SubscribeSubject WheelDisplacement
    -> SampleInterval(Interval=PT0.02S)
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector="Item1,Item2", SymbolType=None, LineWidth=1, CurveSettings="", Capacity=10000, Min=nil, Max=nil)
    -> VisualizerMapping => #40
    #36, #40 -> Bonsai.Gui.TableLayoutPanelBuilder InState => #41
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=2
      ColumnStyles=""
      RowStyles(RowStyle(SizeType=Percent, Height=25), RowStyle(SizeType=Percent, Height=75))
      CellSpans=""
    Disable SubscribeSubject EndState => #42
    #41, #42 -> Disable TakeUntil
    -> WorkflowOutput
-> Disable VisualizerMapping => #5
Defer WeightMonitor
    BehaviorSubject<System.Single> CurrentWeightValue
    BehaviorSubject<System.Single> CurrentMinuteWeightValue

    SubscribeSubject PercentWeightLoss
    -> Merge
    -> Take(Count=1)
    -> SelectMany StartAveraging
        SubscribeSubject NestWeightData
        -> Merge => #1
        SubscribeSubject PercentWeightLoss
        -> Merge => #3
        #1, #3 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MemberSelector(Selector=CurrentWeight)
        -> WindowTime(TimeSpan=PT1S)
        -> SelectMany Average
            WorkflowInput Source1
            -> Average => #1
            SubscribeSubject CurrentWeightValue
            -> Take(Count=1) => #3
            #1, #3 -> Catch
            -> Take(Count=1)
            -> WorkflowOutput
        -> Condition
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Single.IsNaN(it)
            -> BitwiseNot
            -> WorkflowOutput
        -> WorkflowOutput
    -> MulticastSubject CurrentWeightValue

    SubscribeSubject PercentWeightLoss
    -> Merge => #8
    -> MemberSelector(Selector=Timestamp)
    -> Aeon.Acquisition.GetDateTime => #10
    #8 -> MemberSelector(Selector=CurrentWeight) => #11
    #8 -> MemberSelector(Selector=CurrentPercent) => #12
    #10, #11, #12 -> Zip
    -> Format
      Format:
        Timestamp: {0}
        Weight: {1}
        LossWeightPercent: {2}
      Selector="Item1,Item2,Item3"
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder Weight
      Enabled=true
      Visible=true
      Font="Microsoft Sans Serif, 12pt, style=Bold"
      Text:
        Timestamp: 11/19/2025 09:39:07
        Weight: 21.46025
        LossWeightPercent: 63.11837
    -> VisualizerMapping => #17
    SubscribeSubject CurrentWeightValue
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new (it as Weight)
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector=Weight, SymbolType=None, LineWidth=1, CurveSettings="", Capacity=60, Min=nil, Max=nil)
    -> VisualizerMapping => #21
    SubscribeSubject CurrentWeightValue
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new (it as Weight)
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector=Weight, SymbolType=None, LineWidth=1, CurveSettings="", Capacity=3600, Min=nil, Max=nil)
    -> VisualizerMapping => #25
    SubscribeSubject CurrentWeightValue
    -> WindowTime(TimeSpan=PT1M)
    -> SelectMany
        WorkflowInput Source1
        -> Average => #1
        SubscribeSubject CurrentMinuteWeightValue => #2
        #1, #2 -> Catch
        -> Take(Count=1)
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new (it as Weight)
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector=Weight, SymbolType=None, LineWidth=1, CurveSettings="", Capacity=14400, Min=nil, Max=nil)
    -> VisualizerMapping => #31
    #17, #21, #25, #31 -> Bonsai.Gui.TableLayoutPanelBuilder Weight
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=3
      ColumnStyles=""
      RowStyles
        RowStyle(SizeType=Percent, Height=10)
        RowStyle(SizeType=Percent, Height=30)
        RowStyle(SizeType=Percent, Height=30)
        RowStyle(SizeType=Percent, Height=30)
      CellSpans=""
    -> WorkflowOutput
-> VisualizerMapping => #7
#1, #3, #5, #7 -> Bonsai.Gui.TabControlBuilder Environment(Enabled=true, Visible=true)
-> VisualizerMapping => #9
Defer CameraViz
    SubscribeSubject FrameEvents
    -> MemberSelector(Selector=Key) => #1
    SubscribeSubject RigConfiguration
    -> MemberSelector(Selector=Cameras.Count)
    -> PropertyMapping(Count) => #4
    #1, #4 -> Take(Count=10)
    -> ToArray
    -> Bonsai.Gui.ListBoxDataSourceBuilder(Enabled=true, Visible=true, DisplayMember="")
    -> BehaviorSubject SelectedCamera
    -> VisualizerMapping => #9
    SubscribeSubject SelectedCamera
    -> CreateObservable
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject SelectedCamera

        SubscribeSubject FrameEvents
        -> Condition
            WorkflowInput Source1 => #0
            SubscribeSubject SelectedCamera => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector="Item1.Key.Item1,Item2.Item1")
            -> Equal
            -> WorkflowOutput
        -> Merge
        -> MemberSelector(Selector=Value.Image)
        -> WorkflowOutput
    -> Switch => #12
    -> BufferTime(TimeSpan=PT1S)
    -> MemberSelector(Selector=Count)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #15
    Defer CamerasControlButton
        BehaviorSubject<System.Boolean> CamerasRunning => #0
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> StringProperty(Value=Stop) => #2
        #0 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> StringProperty(Value=Start) => #5
        #2, #5 -> Merge
        -> PropertyMapping(Text) => #7
        BooleanProperty(Value=false)
        -> PropertyMapping(Checked) => #9
        #7, #9 -> Bonsai.Gui.ToggleButtonBuilder(Enabled=true, Visible=true, Text=Start, Checked=false)
        -> MulticastSubject CamerasRunning
        -> WorkflowOutput

        SubscribeSubject CamerasRunning
        -> Skip(Count=1) => #14
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> MulticastSubject StartCameras
        #14 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> MulticastSubject StopCameras
    -> VisualizerMapping => #17
    #9, #15, #17 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #19
    #12 -> VisualizerMapping => #20
    SubscribeSubject FrameEvents
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Key.Item1) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=WorkflowProperty<HtsLoom.CameraName>(Value=CameraTop))
        -> WorkflowOutput
    -> Merge
    -> MemberSelector(Selector=Value.Image)
    -> SampleInterval(Interval=PT0.03S) => #25
    SubscribeSubject TrackingEvents
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Key) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=WorkflowProperty<HtsLoom.CameraName>(Value=CameraTop))
        -> WorkflowOutput
    -> Merge
    -> Condition "Has elements"
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Count)
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> SampleInterval(Interval=PT0.03S)
    -> MemberSelector(Selector=Value[0].Centroid)
    -> VisualizerMapping => #32
    #25, #32 -> VisualizerMapping
    -> Bonsai.Gui.TableLayoutPanelBuilder Tracking(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #35
    SubscribeSubject Heatmap
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Key) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=WorkflowProperty<HtsLoom.CameraName>(Value=CameraTop))
        -> WorkflowOutput
    -> Merge
    -> VisualizerMapping
    -> Bonsai.Gui.TableLayoutPanelBuilder Heatmap(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #41
    #35, #41 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #43
    #19, #20, #43 -> Bonsai.Gui.TableLayoutPanelBuilder Cameras
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=3
      ColumnStyles=""
      RowStyles(RowStyle(SizeType=Percent, Height=10), RowStyle(SizeType=Percent, Height=65), RowStyle(SizeType=Percent, Height=25))
      CellSpans=""
    -> WorkflowOutput
-> VisualizerMapping => #11
Defer HeadTailViz
    BehaviorSubject<System.Int32> BlobId
    BehaviorSubject<System.String> HistVsHeadTail

    ExternalizedMapping(Count(DisplayName=NumberOfBlobs))
    -> Range(Start=0, Count=5)
    -> ReplaySubject BlobsRange(BufferSize=nil)

    SubscribeSubject HeadTailObservable
    -> SelectMany Histograms
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject HeadTail

        SubscribeSubject HeadTail
        -> Merge
        -> SampleInterval(Interval=PT0.1S)
        -> MemberSelector(Selector=Value.Item1.Centroid)
        -> Bonsai.Dsp.Histogram2D(MinX=0, MaxX=1440, MinY=0, MaxY=1080, BinsX=288, BinsY=216, Normalize=false, Accumulate=true)
        -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=20, Shift=0) => #8
        SubscribeSubject HeadTail
        -> MemberSelector(Selector=Key) => #10
        #8, #10 -> WithLatestFrom
        -> WorkflowOutput
    -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
    -> ReplaySubject Histograms(BufferSize=nil)

    SubscribeSubject SelectedCamera => #9
    SubscribeSubject BlobId => #10
    #9, #10 -> CombineLatest
    -> BehaviorSubject SelectedItemKey

    SubscribeSubject SelectedItemKey
    -> CreateObservable
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject BlobId

        SubscribeSubject HeadTailObservable => #3
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            SubscribeSubject BlobId => #2
            #1, #2 -> WithLatestFrom
            -> IncludeWorkflow(Path=Extensions\IdenticalKeysBlobCamera.bonsai)
            -> WorkflowOutput
        -> Merge
        -> WorkflowOutput
        #3 -> MemberSelector(Selector=Key)
    -> Switch
    -> PublishSubject SelectedHeadTail

    SubscribeSubject HeadTailTrackingSettings
    -> MemberSelector(Selector=Keys)
    -> Merge
    -> ToArray
    -> Bonsai.Gui.ListBoxDataSourceBuilder(Enabled=true, Visible=true, DisplayMember="")
    -> BehaviorSubject SelectedCamera
    -> VisualizerMapping => #23
    SubscribeSubject BlobsRange
    -> Format(Format="BlobId {0}", Selector=it)
    -> ToArray
    -> Bonsai.Gui.ListBoxDataSourceBuilder(Enabled=true, Visible=true, DisplayMember="")
    -> Sink
        WorkflowInput Source1
        -> Parse(Pattern="BlobId %i")
        -> MulticastSubject BlobId
        -> WorkflowOutput
    -> VisualizerMapping => #29
    Bonsai.Gui.ListBoxBuilder(Enabled=true, Visible=true, Items(string=Histogram, string=HeadTail), SelectedItem=Histogram)
    -> Sink
        WorkflowInput Source1
        -> MulticastSubject HistVsHeadTail
        -> WorkflowOutput
    -> VisualizerMapping => #32
    #23, #29, #32 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #34
    SubscribeSubject HistVsHeadTail
    -> CreateObservable HistogramOrHeadTail
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject SelectedStream

        SubscribeSubject SelectedItemKey
        -> CreateObservable Histogram2D
            WorkflowInput Source1
            -> AsyncSubject selectedItem

            SubscribeSubject Histograms
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Key) => #1
                SubscribeSubject selectedItem => #2
                #1, #2 -> WithLatestFrom
                -> IncludeWorkflow(Path=Extensions\IdenticalKeysBlobCamera.bonsai)
                -> WorkflowOutput
            -> Merge
            -> WorkflowOutput
        -> Switch => #5
        SubscribeSubject SelectedStream
        -> Condition => #7
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Histogram))
            -> WorkflowOutput
        #5, #7 -> SubscribeWhen => #8
        SubscribeSubject SelectedCamera
        -> CreateObservable HeadTailVisualizer
            WorkflowInput Source1
            -> AsyncSubject SelectedCamera

            ExternalizedMapping(Name)
            -> SubscribeSubject HeadTailObservable => #3
            SubscribeSubject SelectedCamera
            -> PropertyMapping(Value) => #5
            #3, #5 -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Key.Item1) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<HtsLoom.CameraName>(Value=CameraTop))
                -> WorkflowOutput
            -> ReplaySubject HeadTails(BufferSize=nil)

            SubscribeSubject FrameEvents
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Key.Item1) => #1
                SubscribeSubject SelectedCamera => #2
                #1, #2 -> WithLatestFrom
                -> Equal
                -> WorkflowOutput
            -> Merge
            -> PublishSubject ProcessedImage

            SubscribeSubject ProcessedImage
            -> SampleInterval(Interval=PT0.1S)
            -> SelectMany
                SubscribeSubject HeadTails
                -> SelectMany
                    ExternalizedMapping(Name(DisplayName=ProcessedImage, Category=Subject)) => #0
                    -> SubscribeSubject ProcessedImage
                    -> MemberSelector(Selector=Value.Image)
                    -> GroupWorkflow CreateCanvas => #3
                        WorkflowInput Source1
                        -> InputMapping(Size(Selector=Size))
                        -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=1440, Height=1080), Depth=U8, Channels=4, Color(Val0=0, Val1=0, Val2=0, Val3=0))
                        -> WorkflowOutput
                    #3, #0 -> GroupWorkflow AddImage
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Name)
                        -> SubscribeSubject ProcessedImage => #2
                        -> MemberSelector(Selector=Value.Image)
                        -> Bonsai.Vision.ConvertColor(Conversion=Gray2Bgra) => #4
                        #2 -> MemberSelector(Selector=Value.Image.Size)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                          Expression: new (0 as X, 0 as Y ,it.Width as Width, it.Height as Height)
                        #0, #4, #6 -> Zip
                        -> InputMapping(Selector=Item1, Image(Selector=Item2), Destination(Selector="Item3.X,Item3.Y,Item3.Width,Item3.Height"))
                        -> Bonsai.Vision.Drawing.AddImage(Destination(X=0, Y=0, Width=1440, Height=1080), Interpolation=Linear)
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> BehaviorSubject Canvas

                SubscribeSubject BlobsRange => #3
                SubscribeSubject Canvas => #4
                #3, #4 -> SubscribeWhen
                -> CreateObservable
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject BlobId

                    SubscribeSubject HeadTails => #3
                    SubscribeSubject BlobId => #4
                    #3, #4 -> SubscribeWhen
                    -> Condition
                        WorkflowInput Source1
                        -> MemberSelector(Selector=Key.Item2) => #1
                        SubscribeSubject BlobId => #2
                        #1, #2 -> WithLatestFrom
                        -> Equal
                        -> WorkflowOutput
                    -> BehaviorSubject CurrentHeadTail

                    SubscribeSubject Canvas => #8
                    SubscribeSubject CurrentHeadTail
                    -> Merge => #10
                    #8, #10 -> Sample => #11
                    #10 -> PropertyMapping(Contour(Selector=Value.Item2.Contour)) => #12
                    #11, #12 -> GroupWorkflow AddBlob => #13
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Contour) => #1
                        #0, #1 -> Bonsai.Vision.Drawing.DrawContours(ExternalColor(Val0=255, Val1=0, Val2=255, Val3=255), HoleColor(Val0=0, Val1=0, Val2=0, Val3=0), MaxLevel=0, Thickness=2, LineType=Connected8)
                        -> WorkflowOutput
                    #10 -> MemberSelector(Selector=Value.Item1.Head)
                    -> PropertyMapping(Center(Selector=it)) => #15
                    #13, #15 -> Bonsai.Vision.Drawing.Circle(Center(X=1122, Y=889), Radius=2, Color(Val0=0, Val1=0, Val2=255, Val3=255), Thickness=2, LineType=Connected8, Shift=0) => #16
                    #10 -> MemberSelector(Selector=Value.Item2.Centroid) => #17
                    -> PropertyMapping(Center) => #18
                    #16, #18 -> Bonsai.Vision.Drawing.Circle(Center(X=1150, Y=833), Radius=2, Color(Val0=0, Val1=255, Val2=0, Val3=255), Thickness=2, LineType=Connected8, Shift=0) => #19
                    #10 -> MemberSelector(Selector=Value.Item1.Tail)
                    -> PropertyMapping(Center) => #21
                    #19, #21 -> Bonsai.Vision.Drawing.Circle(Center(X=1193, Y=782), Radius=2, Color(Val0=255, Val1=255, Val2=255, Val3=255), Thickness=2, LineType=Connected8, Shift=0) => #22
                    #22, #17 -> Zip
                    -> InputMapping(Selector=Item1, Origin(Selector=Item2)) => #24
                    SubscribeSubject BlobId
                    -> Format(Format={0}, Selector=it)
                    -> PropertyMapping(Text) => #27
                    #24, #27 -> Bonsai.Vision.Drawing.AddText
                      Text=4
                      Alignment=Center
                      LineAlignment=Center
                      TextRenderingHint=AntiAliasGridFit
                      Color(Val0=255, Val1=255, Val2=255, Val3=150)
                      Font="Microsoft Sans Serif, 27.75pt, style=Bold"
                      Origin(X=1150, Y=833)
                    -> MulticastSubject Canvas => #29
                    SubscribeSubject BlobId => #30
                    #29, #30 -> WithLatestFrom
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Concat
                -> MemberSelector(Selector=Item1)
                -> TakeLast(Count=1)
                -> Bonsai.Vision.Drawing.DrawCanvas
                -> WorkflowOutput
            -> WorkflowOutput
        -> Switch => #11
        SubscribeSubject SelectedStream
        -> Condition => #13
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=HeadTail))
            -> WorkflowOutput
        #11, #13 -> SubscribeWhen => #14
        #8, #14 -> Disable Amb
        -> Merge
        -> WorkflowOutput
    -> Switch
    -> VisualizerMapping => #38
    SubscribeSubject SelectedHeadTail
    -> MemberSelector(Selector=Value.Item1.Heading)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
          it as LoomAngle
        )
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector=LoomAngle, SymbolType=None, LineWidth=1, CurveSettings="", Capacity=nil, Min=nil, Max=nil)
    -> VisualizerMapping => #43
    SubscribeSubject SelectedHeadTail
    -> MemberSelector(Selector=Value.Item1.Velocity)
    -> Bonsai.Dsp.Norm(NormType=L2)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
          it as Velocity)
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector=Velocity, SymbolType=None, LineWidth=1, CurveSettings="", Capacity=nil, Min=nil, Max=nil)
    -> VisualizerMapping => #49
    #43, #49 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #51
    #34, #38, #51 -> Bonsai.Gui.TableLayoutPanelBuilder HeadTail
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=3
      ColumnStyles=""
      RowStyles(RowStyle(SizeType=Percent, Height=10), RowStyle(SizeType=Percent, Height=65), RowStyle(SizeType=Percent, Height=25))
      CellSpans=""
    -> WorkflowOutput

    Disable SubscribeSubject SelectedItemKey
    -> Disable CreateObservable Histogram2D
        WorkflowInput Source1
        -> AsyncSubject selectedItem

        SubscribeSubject Histograms
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            SubscribeSubject selectedItem => #2
            #1, #2 -> WithLatestFrom
            -> IncludeWorkflow(Path=Extensions\IdenticalKeysBlobCamera.bonsai)
            -> WorkflowOutput
        -> Merge
        -> WorkflowOutput
    -> Disable Switch
    -> Disable ObserveOn(Scheduler=TaskPoolScheduler)
    -> Disable VisualizerMapping => #58
    Disable SubscribeSubject SelectedCamera
    -> Disable CreateObservable HeadTailVisualizer
        WorkflowInput Source1
        -> AsyncSubject SelectedCamera

        ExternalizedMapping(Name)
        -> SubscribeSubject HeadTailObservable => #3
        SubscribeSubject SelectedCamera
        -> PropertyMapping(Value) => #5
        #3, #5 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Key.Item1) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=WorkflowProperty<HtsLoom.CameraName>(Value=CameraTop))
            -> WorkflowOutput
        -> ReplaySubject HeadTails(BufferSize=nil)

        SubscribeSubject FrameEvents
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Key.Item1) => #1
            SubscribeSubject SelectedCamera => #2
            #1, #2 -> WithLatestFrom
            -> Equal
            -> WorkflowOutput
        -> Merge
        -> PublishSubject ProcessedImage

        SubscribeSubject ProcessedImage
        -> SampleInterval(Interval=PT0.1S)
        -> SelectMany
            SubscribeSubject HeadTails
            -> SelectMany
                ExternalizedMapping(Name(DisplayName=ProcessedImage, Category=Subject)) => #0
                -> SubscribeSubject ProcessedImage
                -> MemberSelector(Selector=Value.Image)
                -> GroupWorkflow CreateCanvas => #3
                    WorkflowInput Source1
                    -> InputMapping(Size(Selector=Size))
                    -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=1440, Height=1080), Depth=U8, Channels=4, Color(Val0=0, Val1=0, Val2=0, Val3=0))
                    -> WorkflowOutput
                #3, #0 -> GroupWorkflow AddImage
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Name)
                    -> SubscribeSubject ProcessedImage => #2
                    -> MemberSelector(Selector=Value.Image)
                    -> Bonsai.Vision.ConvertColor(Conversion=Gray2Bgra) => #4
                    #2 -> MemberSelector(Selector=Value.Image.Size)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                      Expression: new (0 as X, 0 as Y ,it.Width as Width, it.Height as Height)
                    #0, #4, #6 -> Zip
                    -> InputMapping(Selector=Item1, Image(Selector=Item2), Destination(Selector="Item3.X,Item3.Y,Item3.Width,Item3.Height"))
                    -> Bonsai.Vision.Drawing.AddImage(Destination(X=0, Y=0, Width=1440, Height=1080), Interpolation=Linear)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> WorkflowOutput
            -> BehaviorSubject Canvas

            SubscribeSubject BlobsRange => #3
            SubscribeSubject Canvas => #4
            #3, #4 -> SubscribeWhen
            -> CreateObservable
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject BlobId

                SubscribeSubject HeadTails => #3
                SubscribeSubject BlobId => #4
                #3, #4 -> SubscribeWhen
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key.Item2) => #1
                    SubscribeSubject BlobId => #2
                    #1, #2 -> WithLatestFrom
                    -> Equal
                    -> WorkflowOutput
                -> BehaviorSubject CurrentHeadTail

                SubscribeSubject Canvas => #8
                SubscribeSubject CurrentHeadTail
                -> Merge => #10
                #8, #10 -> Sample => #11
                #10 -> PropertyMapping(Contour(Selector=Value.Item2.Contour)) => #12
                #11, #12 -> GroupWorkflow AddBlob => #13
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Contour) => #1
                    #0, #1 -> Bonsai.Vision.Drawing.DrawContours(ExternalColor(Val0=255, Val1=0, Val2=255, Val3=255), HoleColor(Val0=0, Val1=0, Val2=0, Val3=0), MaxLevel=0, Thickness=2, LineType=Connected8)
                    -> WorkflowOutput
                #10 -> MemberSelector(Selector=Value.Item1.Head)
                -> PropertyMapping(Center(Selector=it)) => #15
                #13, #15 -> Bonsai.Vision.Drawing.Circle(Center(X=1122, Y=889), Radius=2, Color(Val0=0, Val1=0, Val2=255, Val3=255), Thickness=2, LineType=Connected8, Shift=0) => #16
                #10 -> MemberSelector(Selector=Value.Item2.Centroid) => #17
                -> PropertyMapping(Center) => #18
                #16, #18 -> Bonsai.Vision.Drawing.Circle(Center(X=1150, Y=833), Radius=2, Color(Val0=0, Val1=255, Val2=0, Val3=255), Thickness=2, LineType=Connected8, Shift=0) => #19
                #10 -> MemberSelector(Selector=Value.Item1.Tail)
                -> PropertyMapping(Center) => #21
                #19, #21 -> Bonsai.Vision.Drawing.Circle(Center(X=1193, Y=782), Radius=2, Color(Val0=255, Val1=255, Val2=255, Val3=255), Thickness=2, LineType=Connected8, Shift=0) => #22
                #22, #17 -> Zip
                -> InputMapping(Selector=Item1, Origin(Selector=Item2)) => #24
                SubscribeSubject BlobId
                -> Format(Format={0}, Selector=it)
                -> PropertyMapping(Text) => #27
                #24, #27 -> Bonsai.Vision.Drawing.AddText
                  Text=4
                  Alignment=Center
                  LineAlignment=Center
                  TextRenderingHint=AntiAliasGridFit
                  Color(Val0=255, Val1=255, Val2=255, Val3=150)
                  Font="Microsoft Sans Serif, 27.75pt, style=Bold"
                  Origin(X=1150, Y=833)
                -> MulticastSubject Canvas => #29
                SubscribeSubject BlobId => #30
                #29, #30 -> WithLatestFrom
                -> Take(Count=1)
                -> WorkflowOutput
            -> Concat
            -> MemberSelector(Selector=Item1)
            -> TakeLast(Count=1)
            -> Bonsai.Vision.Drawing.DrawCanvas
            -> WorkflowOutput
        -> WorkflowOutput
    -> Disable Switch
    -> Disable ObserveOn(Scheduler=TaskPoolScheduler)
    -> Disable VisualizerMapping => #63
    #58, #63 -> Disable Bonsai.Gui.TabControlBuilder tEST(Enabled=true, Visible=true)
-> VisualizerMapping => #13
#11, #13 -> Bonsai.Gui.TabControlBuilder ComputerVision(Enabled=true, Visible=true)
-> VisualizerMapping => #15
#9, #15 -> Bonsai.Gui.TableLayoutPanelBuilder HtsLoom(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
-> WorkflowOutput
