<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>FeedersTask</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>LogStatesLane</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>StateGroup</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateGroup</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new (it.Item1 as State, it.Item2 as MetaState)</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggerTimestamp</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateGroup</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>StateLog_{0}_States_Events</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="LogName" Selector="Item2" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
              <Heartbeats>Heartbeats</Heartbeats>
              <ClosingDuration>PT2S</ClosingDuration>
              <LogName>StateLog_States_Events</LogName>
              <Selector>Seconds,Value.MetaState.Item2,Value.State</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="8" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PlayerTransition</Name>
      </Expression>
      <Expression xsi:type="rx:GroupBy">
        <rx:KeySelector>Item2</rx:KeySelector>
        <rx:ElementSelector>Item1</rx:ElementSelector>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>LogMetaStateLane</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TransitionGroup</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TransitionGroup</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggerTimestamp</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TransitionGroup</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>StateLog_{0}_MetaState_Events</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="LogName" Selector="Item2" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
              <Heartbeats>Heartbeats</Heartbeats>
              <ClosingDuration>PT2S</ClosingDuration>
              <LogName>StateLog_MetaState_Events</LogName>
              <Selector>Seconds,Value.TargetState,Value.ActivationInterval,Value.ActivationRewards,Value.ActivationTransitions,Value.ActivationEvent</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="7" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FeederWheel</Name>
      </Expression>
      <Expression xsi:type="rx:GroupBy">
        <rx:KeySelector>Item2</rx:KeySelector>
        <rx:ElementSelector>Item1</rx:ElementSelector>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>LogWheelLane</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>WheelGroup</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>WheelGroup</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggerTimestamp</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>WheelGroup</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>FeederLog_{0}_Wheel_Events</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="LogName" Selector="Item2" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
              <Heartbeats>Heartbeats</Heartbeats>
              <ClosingDuration>PT2S</ClosingDuration>
              <LogName>FeederLog_Wheel_Events</LogName>
              <Selector>Seconds,Value.Item2,Value.Item1.Item2,Value.Item1.Item1</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="7" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FeederInStateReward</Name>
      </Expression>
      <Expression xsi:type="rx:GroupBy">
        <rx:KeySelector>Player</rx:KeySelector>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>LogPelletLane</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>PelletGroup</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PelletGroup</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggerTimestamp</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PelletGroup</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>StateLog_{0}_Reward_Events</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="LogName" Selector="Item2" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
              <Heartbeats>Heartbeats</Heartbeats>
              <ClosingDuration>PT2S</ClosingDuration>
              <LogName>StateLog_Reward_Events</LogName>
              <Selector>Seconds,Value.Feeder,Value.MetaState,Value.Distance,Value.DistanceThreshold,Value.EatenPellets,Value.MissedPellets</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="7" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>