<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:System.Reactive.Linq;assembly=System.Reactive.Interfaces"
                 xmlns:p2="clr-namespace:HtsLoom;assembly=Extensions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p3="clr-namespace:System.Windows.Forms;assembly=System.Windows.Forms, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089"
                 xmlns:scg="clr-namespace:System.Collections.Generic;assembly=mscorlib"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p4="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:aeon-env="clr-namespace:Aeon.Environment;assembly=Aeon.Environment"
                 xmlns:p5="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:ReplaySubject" TypeArguments="p1:IGroupedObservable(p2:EventName,sys:Tuple(harp:Timestamped(sys:Boolean),sys:Tuple(p2:CameraName,sys:Int32,sys:Int32)))">
        <rx:Name>ZoneTaskTriggerObservable</rx:Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="rx:ReplaySubject" TypeArguments="p1:IGroupedObservable(p2:EventName,sys:Tuple(harp:Timestamped(sys:Boolean),sys:Tuple(p2:CameraName,sys:Int32,sys:Int32)))">
        <rx:Name>LogZoneLoomTrigger</rx:Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="rx:ReplaySubject" TypeArguments="p1:IGroupedObservable(sys:String,p3:Keys)">
        <rx:Name>LogKeyLoomTrigger</rx:Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="rx:ReplaySubject" TypeArguments="p1:IGroupedObservable(p2:ScreenName,scg:IList(sys:String))">
        <rx:Name>SelectedLoomsObservable</rx:Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>ZoneTriggers</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:Tuple(harp:Timestamped(sys:Boolean),sys:Tuple(p2:CameraName,sys:Int32,sys:Int32)),p2:EventName)">
              <rx:Name>LoomingTaskStartTrigger</rx:Name>
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item2</rx:KeySelector>
              <rx:ElementSelector>Item1</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ZoneTaskTriggerObservable</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskConfiguration</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ZoneTriggers</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>ZoneTriggers</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>ZoneTriggerSettings</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="BlobId" DisplayName="LeesThanBlobId" />
                  </Expression>
                  <Expression xsi:type="rx:Defer">
                    <Name>ActivationCondition</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ZoneTriggerSettings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Camera,ZoneId</Selector>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Key</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>LoomInRegionTimeObservable</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="BlobId" />
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Key.Item2</Selector>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" DisplayName="BlobId" />
                              </Expression>
                              <Expression xsi:type="LessThanOrEqual">
                                <Operand xsi:type="IntProperty">
                                  <Value>2</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Key.Item1,Key.Item3</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Key</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1.Item1,Item2.Item1</Selector>
                              </Expression>
                              <Expression xsi:type="Equal" />
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1.Item2,Item2.Item2</Selector>
                              </Expression>
                              <Expression xsi:type="Equal" />
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="BitwiseAnd" />
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="3" To="6" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="8" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source2" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:SelectMany">
                          <Name>InZoneTimeCondition</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>BlobInZoneObservable</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>BlobInZoneObservable</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Value</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ZoneTriggerSettings</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>TimeInRegion</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="GreaterThan" />
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:DistinctUntilChanged" />
                              </Expression>
                              <Expression xsi:type="rx:CreateObservable">
                                <Name>CheckAngle</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Take">
                                        <rx:Count>1</rx:Count>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="rx:AsyncSubject">
                                      <Name>InRegion</Name>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>LoomAngleObservable</Name>
                                    </Expression>
                                    <Expression xsi:type="rx:Condition">
                                      <Name>SameKey</Name>
                                      <Workflow>
                                        <Nodes>
                                          <Expression xsi:type="WorkflowInput">
                                            <Name>Source1</Name>
                                          </Expression>
                                          <Expression xsi:type="MemberSelector">
                                            <Selector>Key</Selector>
                                          </Expression>
                                          <Expression xsi:type="SubscribeSubject">
                                            <Name>BlobInZoneObservable</Name>
                                          </Expression>
                                          <Expression xsi:type="MemberSelector">
                                            <Selector>Key</Selector>
                                          </Expression>
                                          <Expression xsi:type="Combinator">
                                            <Combinator xsi:type="rx:WithLatestFrom" />
                                          </Expression>
                                          <Expression xsi:type="MemberSelector">
                                            <Selector>Item1.Item1,Item2.Item1</Selector>
                                          </Expression>
                                          <Expression xsi:type="Equal" />
                                          <Expression xsi:type="MemberSelector">
                                            <Selector>Item1.Item2,Item2.Item2</Selector>
                                          </Expression>
                                          <Expression xsi:type="Equal" />
                                          <Expression xsi:type="MemberSelector">
                                            <Selector>Item1.Item3,Item2.Item3</Selector>
                                          </Expression>
                                          <Expression xsi:type="Equal" />
                                          <Expression xsi:type="Combinator">
                                            <Combinator xsi:type="rx:Zip" />
                                          </Expression>
                                          <Expression xsi:type="BitwiseAnd" />
                                          <Expression xsi:type="WorkflowOutput" />
                                        </Nodes>
                                        <Edges>
                                          <Edge From="0" To="1" Label="Source1" />
                                          <Edge From="1" To="4" Label="Source1" />
                                          <Edge From="2" To="3" Label="Source1" />
                                          <Edge From="3" To="4" Label="Source2" />
                                          <Edge From="4" To="5" Label="Source1" />
                                          <Edge From="4" To="7" Label="Source1" />
                                          <Edge From="4" To="9" Label="Source1" />
                                          <Edge From="5" To="6" Label="Source1" />
                                          <Edge From="6" To="11" Label="Source1" />
                                          <Edge From="7" To="8" Label="Source1" />
                                          <Edge From="8" To="11" Label="Source2" />
                                          <Edge From="9" To="10" Label="Source1" />
                                          <Edge From="10" To="11" Label="Source3" />
                                          <Edge From="11" To="12" Label="Source1" />
                                          <Edge From="12" To="13" Label="Source1" />
                                        </Edges>
                                      </Workflow>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Merge" />
                                    </Expression>
                                    <Expression xsi:type="rx:BehaviorSubject">
                                      <Name>LoomAngle</Name>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>LoomAngle</Name>
                                    </Expression>
                                    <Expression xsi:type="rx:Condition">
                                      <Name>InRegion</Name>
                                      <Workflow>
                                        <Nodes>
                                          <Expression xsi:type="SubscribeSubject">
                                            <Name>InRegion</Name>
                                          </Expression>
                                          <Expression xsi:type="Combinator">
                                            <Combinator xsi:type="rx:Take">
                                              <rx:Count>1</rx:Count>
                                            </Combinator>
                                          </Expression>
                                          <Expression xsi:type="WorkflowOutput" />
                                        </Nodes>
                                        <Edges>
                                          <Edge From="0" To="1" Label="Source1" />
                                          <Edge From="1" To="2" Label="Source1" />
                                        </Edges>
                                      </Workflow>
                                    </Expression>
                                    <Expression xsi:type="GroupWorkflow">
                                      <Name>AngleCondition</Name>
                                      <Workflow>
                                        <Nodes>
                                          <Expression xsi:type="WorkflowInput">
                                            <Name>Source1</Name>
                                          </Expression>
                                          <Expression xsi:type="MemberSelector">
                                            <Selector>Value</Selector>
                                          </Expression>
                                          <Expression xsi:type="Combinator">
                                            <Combinator xsi:type="dsp:Abs" />
                                          </Expression>
                                          <Expression xsi:type="SubscribeSubject">
                                            <Name>ZoneTriggerSettings</Name>
                                          </Expression>
                                          <Expression xsi:type="MemberSelector">
                                            <Selector>AngleThreshold</Selector>
                                          </Expression>
                                          <Expression xsi:type="PropertyMapping">
                                            <PropertyMappings>
                                              <Property Name="Value" />
                                            </PropertyMappings>
                                          </Expression>
                                          <Expression xsi:type="LessThan">
                                            <Operand xsi:type="DoubleProperty">
                                              <Value>1.57</Value>
                                            </Operand>
                                          </Expression>
                                          <Expression xsi:type="rx:Condition">
                                            <Workflow>
                                              <Nodes>
                                                <Expression xsi:type="WorkflowInput">
                                                  <Name>Source1</Name>
                                                </Expression>
                                                <Expression xsi:type="WorkflowOutput" />
                                              </Nodes>
                                              <Edges>
                                                <Edge From="0" To="1" Label="Source1" />
                                              </Edges>
                                            </Workflow>
                                          </Expression>
                                          <Expression xsi:type="MemberSelector">
                                            <Selector>Seconds</Selector>
                                          </Expression>
                                          <Expression xsi:type="Combinator">
                                            <Combinator xsi:type="rx:WithLatestFrom" />
                                          </Expression>
                                          <Expression xsi:type="Combinator">
                                            <Combinator xsi:type="harp:CreateTimestamped" />
                                          </Expression>
                                          <Expression xsi:type="WorkflowOutput" />
                                        </Nodes>
                                        <Edges>
                                          <Edge From="0" To="1" Label="Source1" />
                                          <Edge From="0" To="8" Label="Source1" />
                                          <Edge From="1" To="2" Label="Source1" />
                                          <Edge From="2" To="6" Label="Source1" />
                                          <Edge From="3" To="4" Label="Source1" />
                                          <Edge From="4" To="5" Label="Source1" />
                                          <Edge From="5" To="6" Label="Source2" />
                                          <Edge From="6" To="7" Label="Source1" />
                                          <Edge From="7" To="9" Label="Source1" />
                                          <Edge From="8" To="9" Label="Source2" />
                                          <Edge From="9" To="10" Label="Source1" />
                                          <Edge From="10" To="11" Label="Source1" />
                                        </Edges>
                                      </Workflow>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Take">
                                        <rx:Count>1</rx:Count>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                    <Edge From="4" To="5" Label="Source1" />
                                    <Edge From="5" To="6" Label="Source1" />
                                    <Edge From="7" To="8" Label="Source1" />
                                    <Edge From="8" To="9" Label="Source1" />
                                    <Edge From="9" To="10" Label="Source1" />
                                    <Edge From="10" To="11" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Switch" />
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>BlobInZoneObservable</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Key</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="8" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source2" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="15" Label="Source1" />
                              <Edge From="13" To="14" Label="Source1" />
                              <Edge From="14" To="15" Label="Source2" />
                              <Edge From="15" To="16" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="5" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>StimulusProbability</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="num:CreateRandom">
                            <num:Seed>11010</num:Seed>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p4:CreateContinuousUniform">
                            <p4:Lower>0</p4:Lower>
                            <p4:Upper>1</p4:Upper>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:BehaviorSubject">
                          <Name>Distribution</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="rx:SelectMany">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Distribution</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p4:Sample" />
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ZoneTriggerSettings</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>TriggerProbability</Selector>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Value" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="LessThan">
                                <Operand xsi:type="DoubleProperty">
                                  <Value>1</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Name />
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="5" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source2" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Seconds</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:CreateTimestamped" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="3" To="9" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="4" To="6" Label="Source1" />
                        <Edge From="5" To="7" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="10" Label="Source1" />
                        <Edge From="9" To="10" Label="Source2" />
                        <Edge From="10" To="11" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>ActivateTriggers</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ZoneTriggerSettings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Trigger</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="rx:SelectMany">
                          <Name>StartTriggers</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>EventName</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>EventName</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>EventName</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="7" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source2" />
                              <Edge From="7" To="8" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="4" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>LoomingTaskStartTrigger</Name>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>TriggerAction</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>EnvironmentState</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
                      <Selector>Value.Type</Selector>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Equal">
                      <Operand xsi:type="WorkflowProperty" TypeArguments="aeon-env:EnvironmentStateType">
                        <Value>Experiment</Value>
                      </Operand>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="rx:WithLatestFrom" />
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="rx:Condition">
                      <Name>Experiment?</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Item2</Selector>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="1" To="2" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>TriggerValve</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="rx:SelectMany">
                      <Name>RefractoryPeriod</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="IncludeWorkflow" Path="Extensions\GetGlobalTrigger.bonsai" />
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Take">
                              <rx:Count>1</rx:Count>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:WithLatestFrom" />
                          </Expression>
                          <Expression xsi:type="Subtract" />
                          <Expression xsi:type="SubscribeSubject">
                            <Name>ZoneTriggerSettings</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>RefractoryPeriod</Selector>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:WithLatestFrom" />
                          </Expression>
                          <Expression xsi:type="GreaterThanOrEqual" />
                          <Expression xsi:type="rx:Condition">
                            <Workflow>
                              <Nodes>
                                <Expression xsi:type="WorkflowInput">
                                  <Name>Source1</Name>
                                </Expression>
                                <Expression xsi:type="WorkflowOutput" />
                              </Nodes>
                              <Edges>
                                <Edge From="0" To="1" Label="Source1" />
                              </Edges>
                            </Workflow>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Take">
                              <rx:Count>1</rx:Count>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="0" To="2" Label="Source1" />
                          <Edge From="1" To="2" Label="Source2" />
                          <Edge From="2" To="3" Label="Source1" />
                          <Edge From="3" To="6" Label="Source1" />
                          <Edge From="4" To="5" Label="Source1" />
                          <Edge From="5" To="6" Label="Source2" />
                          <Edge From="6" To="7" Label="Source1" />
                          <Edge From="7" To="8" Label="Source1" />
                          <Edge From="8" To="9" Label="Source1" />
                          <Edge From="9" To="10" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="rx:Repeat" />
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="WorkflowOutput" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="13" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TaskConfiguration</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>BackgroundColor</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>SetBackgroundColor</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TaskConfiguration</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Looms</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>LoomControl</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>LoomScreenConfiguration</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>SelectedLooms</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>LoomScreenConfiguration</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Key</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:WithLatestFrom" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Item1.Key,Item2</Selector>
                    </Expression>
                    <Expression xsi:type="Equal" />
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Merge" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>SelectedLoomNames</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoomScreenConfiguration</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>ZoneStartTriggers</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>LoomSettings </Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoomSettings </Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.StartTriggers</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>GetZoneObservable</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>TriggerName</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ZoneTaskTriggerObservable</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TriggerName</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1.Key,Item2</Selector>
                              </Expression>
                              <Expression xsi:type="Equal" />
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="5" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>LogZoneLoomTrigger</Name>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>MergeResults</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>TriggerEventsStream</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TriggerEventsStream</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TriggerEventsStream</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="7" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoomSettings </Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoomScreenConfiguration</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="10" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="13" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.Item2</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoomScreenConfiguration</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>KeyStartTriggers</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>LoomSettings </Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoomSettings </Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.StartTriggers</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>GetKeyObservable</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>TriggerName</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>KeyEvents</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TriggerName</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p5:GetEnumKey" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1.Key,Item2</Selector>
                              </Expression>
                              <Expression xsi:type="Equal" />
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="6" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>LogKeyLoomTrigger</Name>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>MergeResults</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>TriggerEventsStream</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TriggerEventsStream</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TriggerEventsStream</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="7" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoomSettings </Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoomScreenConfiguration</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="10" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="13" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.Item2</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>IsActive?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Trigger</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Trigger</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SelectedLoomsObservable</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Trigger</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1.Key,Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Equal" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsActive?</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2,Item1.Item1.Key</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p5:Contains" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="11" Label="Source1" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="15" To="17" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="25" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="21" To="23" Label="Source1" />
            <Edge From="22" To="24" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="24" To="25" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:GroupBy">
        <rx:KeySelector>Item2</rx:KeySelector>
        <rx:ElementSelector>Item1</rx:ElementSelector>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>TaskLoom</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>