<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p1="clr-namespace:HtsLoom;assembly=Extensions"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigConfiguration</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Cameras</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>HasTracking</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Tracking</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it!=null</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>CreateTrackers</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TrackingCameraSettings</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FrameEvents</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>SelectedCamera</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrackingCameraSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Equal" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>CameraFrame</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrackingCameraSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Tracking</Selector>
            </Expression>
            <Expression xsi:type="p1:MatchTracking">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:BlobTracking" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RegionTracking</Selector>
            </Expression>
            <Expression xsi:type="p1:MatchTracking">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:HeadTailTracking" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RegionTracking</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>MaskAndThreshold</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>TrackingParameters</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrackingParameters</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Regions</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:PointArrayConverter" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Regions</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraFrame</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Image</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Regions</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Regions" Selector="Item2" />
                    </PropertyMappings>
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:MaskPolygon">
                      <cv:Regions>
                        <cv:ArrayOfPoint>
                          <cv:Point>
                            <cv:X>62</cv:X>
                            <cv:Y>412</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>139</cv:X>
                            <cv:Y>287</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>302</cv:X>
                            <cv:Y>285</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>400</cv:X>
                            <cv:Y>140</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>563</cv:X>
                            <cv:Y>137</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>639</cv:X>
                            <cv:Y>184</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>848</cv:X>
                            <cv:Y>194</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>855</cv:X>
                            <cv:Y>50</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>915</cv:X>
                            <cv:Y>155</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>1081</cv:X>
                            <cv:Y>165</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>1167</cv:X>
                            <cv:Y>320</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>1325</cv:X>
                            <cv:Y>327</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>1367</cv:X>
                            <cv:Y>408</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>707</cv:X>
                            <cv:Y>1032</cv:Y>
                          </cv:Point>
                          <cv:Point>
                            <cv:X>168</cv:X>
                            <cv:Y>422</cv:Y>
                          </cv:Point>
                        </cv:ArrayOfPoint>
                      </cv:Regions>
                      <cv:MaskType>ToZero</cv:MaskType>
                      <cv:FillValue>
                        <cv:Val0>255</cv:Val0>
                        <cv:Val1>0</cv:Val1>
                        <cv:Val2>0</cv:Val2>
                        <cv:Val3>0</cv:Val3>
                      </cv:FillValue>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrackingParameters</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Threshold</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="ThresholdValue" Selector="Item2" />
                    </PropertyMappings>
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Threshold">
                      <cv:ThresholdValue>100</cv:ThresholdValue>
                      <cv:MaxValue>255</cv:MaxValue>
                      <cv:ThresholdType>BinaryInv</cv:ThresholdType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="16" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:MorphologicalOperator">
                <cv:Size>
                  <cv:Width>4</cv:Width>
                  <cv:Height>4</cv:Height>
                </cv:Size>
                <cv:Anchor>
                  <cv:X>-1</cv:X>
                  <cv:Y>-1</cv:Y>
                </cv:Anchor>
                <cv:Shape>Rectangle</cv:Shape>
                <cv:Iterations>1</cv:Iterations>
                <cv:Operation>Open</cv:Operation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>External</cv:Mode>
                <cv:Method>ChainApproxSimple</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea>10</cv:MinArea>
                <cv:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:SortBinaryRegions" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraFrame</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrackingCameraSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="11" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="13" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="25" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="29" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source2" />
            <Edge From="29" To="30" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:GroupBy">
        <rx:KeySelector>Item2</rx:KeySelector>
        <rx:ElementSelector>Item1</rx:ElementSelector>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>TrackingEvents</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>